<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Harp.OutputExpander;assembly=Harp.OutputExpander"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:viz="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Devices</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>VideoController</Name>
              <Description>Supplies synchronized camera triggering for both global and local views.</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:SynchronizeTimestamp" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LocalTriggerFrequency</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Frequency" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:ConfigurePwm">
                      <p1:Mask>PwmOutput7</p1:Mask>
                      <p1:Frequency>125</p1:Frequency>
                      <p1:DutyCycle>50</p1:DutyCycle>
                      <p1:PulseCount>0</p1:PulseCount>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GlobalTriggerFrequency</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Frequency" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Mask" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:ConfigurePwm">
                      <p1:Mask>PwmOutput1</p1:Mask>
                      <p1:Frequency>30</p1:Frequency>
                      <p1:DutyCycle>50</p1:DutyCycle>
                      <p1:PulseCount>0</p1:PulseCount>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Object">
                    <rx:Name>StartCameras</rx:Name>
                  </Expression>
                  <Expression xsi:type="harp:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="harp:CreateOperationControlPayload">
                      <harp:OperationMode>Active</harp:OperationMode>
                      <harp:DumpRegisters>true</harp:DumpRegisters>
                      <harp:MuteReplies>false</harp:MuteReplies>
                      <harp:VisualIndicators>On</harp:VisualIndicators>
                      <harp:OperationLed>On</harp:OperationLed>
                      <harp:Heartbeat>Enabled</harp:Heartbeat>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreatePwmStartPayload">
                      <p1:PwmStart>Pwm0</p1:PwmStart>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Object">
                    <rx:Name>StopCameras</rx:Name>
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreatePwmStopPayload">
                      <p1:PwmStop>Pwm0</p1:PwmStop>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="PortName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Device">
                      <harp:OperationMode>Active</harp:OperationMode>
                      <harp:OperationLed>On</harp:OperationLed>
                      <harp:DumpRegisters>false</harp:DumpRegisters>
                      <harp:VisualIndicators>On</harp:VisualIndicators>
                      <harp:Heartbeat>Disabled</harp:Heartbeat>
                      <harp:IgnoreErrors>false</harp:IgnoreErrors>
                      <harp:PortName>COM3</harp:PortName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>VideoEvents</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="p1:Parse">
                    <harp:Register xsi:type="p1:TimestampedPwmRiseEvent" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Pwm1</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="HasFlag">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="p1:PwmChannels">
                            <Value>Pwm1</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>LocalTrigger</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Pwm0</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="HasFlag">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="p1:PwmChannels">
                            <Value>Pwm0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>GlobalTrigger</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="GlobalTriggerFrequency" Description="The frequency at which to trigger global cameras." />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DoubleProperty">
                      <Value>30</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>GlobalTriggerFrequency</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="LocalTriggerFrequency" Description="The frequency at which to trigger the fast local cameras." />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DoubleProperty">
                      <Value>125</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>LocalTriggerFrequency</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="14" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="14" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="8" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="14" Label="Source3" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="9" To="11" Label="Source1" />
                  <Edge From="10" To="14" Label="Source4" />
                  <Edge From="11" To="14" Label="Source5" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source6" />
                  <Edge From="14" To="16" Label="Source1" />
                  <Edge From="15" To="16" Label="Source2" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="17" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="19" To="22" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:SpinnakerVideoSource.bonsai">
              <TriggerSource>GlobalTrigger</TriggerSource>
              <TriggerFrequency>GlobalTriggerFrequency</TriggerFrequency>
              <ExposureTime>10000</ExposureTime>
              <SerialNumber>23593997</SerialNumber>
              <Gain>0</Gain>
              <Binning>1</Binning>
              <FrameEvents>Camera1</FrameEvents>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:SpinnakerVideoSource.bonsai">
              <TriggerSource>GlobalTrigger</TriggerSource>
              <TriggerFrequency>GlobalTriggerFrequency</TriggerFrequency>
              <ExposureTime>12500</ExposureTime>
              <SerialNumber>23232640</SerialNumber>
              <Gain>0</Gain>
              <Binning>1</Binning>
              <FrameEvents>Camera2</FrameEvents>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:SpinnakerVideoSource.bonsai">
              <TriggerSource>GlobalTrigger</TriggerSource>
              <TriggerFrequency>GlobalTriggerFrequency</TriggerFrequency>
              <ExposureTime>12500</ExposureTime>
              <SerialNumber>23354693</SerialNumber>
              <Gain>0</Gain>
              <Binning>1</Binning>
              <FrameEvents>Camera3</FrameEvents>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:SpinnakerVideoSource.bonsai">
              <TriggerSource>GlobalTrigger</TriggerSource>
              <TriggerFrequency>GlobalTriggerFrequency</TriggerFrequency>
              <ExposureTime>12500</ExposureTime>
              <SerialNumber>23106229</SerialNumber>
              <Gain>0</Gain>
              <Binning>1</Binning>
              <FrameEvents>Camera4</FrameEvents>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Logging</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogController.bonsai">
              <Path>D:\B2</Path>
              <ChunkSize>1</ChunkSize>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>VideoEvents</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogHarpState.bonsai">
              <LogName>VideoController</LogName>
              <Heartbeats />
              <ClosingDuration xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Camera1</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogVideo.bonsai">
              <Heartbeats />
              <ClosingDuration xsi:nil="true" />
              <LogName>Camera1</LogName>
              <FrameRate>30</FrameRate>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Camera2</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogVideo.bonsai">
              <Heartbeats />
              <ClosingDuration xsi:nil="true" />
              <LogName>Camera2</LogName>
              <FrameRate>30</FrameRate>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Camera3</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogVideo.bonsai">
              <Heartbeats />
              <ClosingDuration xsi:nil="true" />
              <LogName>Camera3</LogName>
              <FrameRate>30</FrameRate>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Camera4</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogVideo.bonsai">
              <Heartbeats />
              <ClosingDuration xsi:nil="true" />
              <LogName>Camera4</LogName>
              <FrameRate>30</FrameRate>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ControlPanel</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Camera1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.Image</Selector>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Camera2</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.Image</Selector>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Camera3</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.Image</Selector>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Camera4</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.Image</Selector>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="viz:TableLayoutPanelBuilder">
              <viz:ColumnCount>3</viz:ColumnCount>
              <viz:RowCount>2</viz:RowCount>
              <viz:ColumnStyles />
              <viz:RowStyles />
              <viz:CellSpans />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="12" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="12" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="12" Label="Source3" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source4" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton ShiftKey ControlKey Space Prior PageUp D0 D1 A P Q NumPad0 NumPad1 F1 F2 Shift</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>StartCameras</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>RButton ShiftKey Menu Space Next PageDown D0 D2 B P R NumPad0 NumPad2 F1 F3 Shift</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>StopCameras</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Camera1</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="SubscribeSubject">
        <Name>Camera2</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="SubscribeSubject">
        <Name>Camera3</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="SubscribeSubject">
        <Name>Camera4</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="viz:TableLayoutPanelBuilder">
        <viz:ColumnCount>1</viz:ColumnCount>
        <viz:RowCount>4</viz:RowCount>
        <viz:ColumnStyles />
        <viz:RowStyles />
        <viz:CellSpans />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoEvents</Name>
      </Expression>
      <Expression xsi:type="p1:Parse">
        <harp:Register xsi:type="p1:TimestampedPwmRiseEvent" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="23" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="23" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="23" Label="Source3" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source4" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>