<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Tub crabitat (summer)</Name>
        <Description>Logitech webcam acquisition for the tub crabitat in 110.</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:CameraCapture">
                <cv:Index>0</cv:Index>
                <cv:CaptureProperties>
                  <cv:CapturePropertyAssignment>
                    <cv:Property>Fps</cv:Property>
                    <cv:Value>30</cv:Value>
                  </cv:CapturePropertyAssignment>
                  <cv:CapturePropertyAssignment>
                    <cv:Property>FrameWidth</cv:Property>
                    <cv:Value>1080</cv:Value>
                  </cv:CapturePropertyAssignment>
                  <cv:CapturePropertyAssignment>
                    <cv:Property>FrameHeight</cv:Property>
                    <cv:Value>1920</cv:Value>
                  </cv:CapturePropertyAssignment>
                </cv:CaptureProperties>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>tub</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>tub</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>7 (summer time)</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp.TimeOfDay</Selector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Start" />
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="TimeSpanProperty">
                      <Value>PT7H</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>videowriter</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>tub</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:VideoWriter">
                      <cv:FileName>E:\Data\CrabStreams\Videos\tub.avi</cv:FileName>
                      <cv:Suffix>Timestamp</cv:Suffix>
                      <cv:Buffered>true</cv:Buffered>
                      <cv:Overwrite>false</cv:Overwrite>
                      <cv:FourCC>FMP4</cv:FourCC>
                      <cv:FrameRate>30</cv:FrameRate>
                      <cv:FrameSize>
                        <cv:Width>0</cv:Width>
                        <cv:Height>0</cv:Height>
                      </cv:FrameSize>
                      <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>tub</Name>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>23:15 (summer time)</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Timestamp.TimeOfDay</Selector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="Start" />
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="TimeSpanProperty">
                            <Value>PT23H15M</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:DistinctUntilChanged" />
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>tub</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp</Selector>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>E:\Data\CrabStreams\Videos\tub.csv</io:FileName>
                    <io:Append>false</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>Timestamp</io:Suffix>
                    <io:IncludeHeader>true</io:IncludeHeader>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Wait until next day</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>tub</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp.TimeOfDay</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Skip">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="LessThan" />
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="3" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Tank crabitat (summer)</Name>
        <Description>Logitech webcam acquisition for the tub crabitat in 110.</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:CameraCapture">
                <cv:Index>1</cv:Index>
                <cv:CaptureProperties>
                  <cv:CapturePropertyAssignment>
                    <cv:Property>Fps</cv:Property>
                    <cv:Value>30</cv:Value>
                  </cv:CapturePropertyAssignment>
                  <cv:CapturePropertyAssignment>
                    <cv:Property>FrameWidth</cv:Property>
                    <cv:Value>1080</cv:Value>
                  </cv:CapturePropertyAssignment>
                  <cv:CapturePropertyAssignment>
                    <cv:Property>FrameHeight</cv:Property>
                    <cv:Value>1920</cv:Value>
                  </cv:CapturePropertyAssignment>
                </cv:CaptureProperties>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>tank</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>tank</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>7 (summer time)</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp.TimeOfDay</Selector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Start" />
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="TimeSpanProperty">
                      <Value>PT7H</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>videowriter</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>tank</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:VideoWriter">
                      <cv:FileName>E:\Data\CrabStreams\Videos\tank.avi</cv:FileName>
                      <cv:Suffix>Timestamp</cv:Suffix>
                      <cv:Buffered>true</cv:Buffered>
                      <cv:Overwrite>false</cv:Overwrite>
                      <cv:FourCC>FMP4</cv:FourCC>
                      <cv:FrameRate>30</cv:FrameRate>
                      <cv:FrameSize>
                        <cv:Width>0</cv:Width>
                        <cv:Height>0</cv:Height>
                      </cv:FrameSize>
                      <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>tank</Name>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>23:15 (summer time)</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Timestamp.TimeOfDay</Selector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="Start" />
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="TimeSpanProperty">
                            <Value>PT23H15M</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:DistinctUntilChanged" />
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>tank</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp</Selector>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>E:\Data\CrabStreams\Videos\tank.csv</io:FileName>
                    <io:Append>false</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>Timestamp</io:Suffix>
                    <io:IncludeHeader>true</io:IncludeHeader>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Wait until next day</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>tank</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Timestamp.TimeOfDay</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Skip">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="LessThan" />
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="3" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Tub crabitat (spring/autumn)</Name>
          <Description>Logitech webcam acquisition for the tub crabitat in 110.</Description>
          <Workflow>
            <Nodes>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="cv:CameraCapture">
                  <cv:Index>0</cv:Index>
                  <cv:CaptureProperties>
                    <cv:CapturePropertyAssignment>
                      <cv:Property>Fps</cv:Property>
                      <cv:Value>30</cv:Value>
                    </cv:CapturePropertyAssignment>
                    <cv:CapturePropertyAssignment>
                      <cv:Property>FrameWidth</cv:Property>
                      <cv:Value>1920</cv:Value>
                    </cv:CapturePropertyAssignment>
                    <cv:CapturePropertyAssignment>
                      <cv:Property>FrameHeight</cv:Property>
                      <cv:Value>1080</cv:Value>
                    </cv:CapturePropertyAssignment>
                  </cv:CaptureProperties>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Timestamp" />
              </Expression>
              <Expression xsi:type="rx:PublishSubject">
                <Name>tub</Name>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>tub</Name>
              </Expression>
              <Expression xsi:type="GroupWorkflow">
                <Name>8 (spring/autumn time)</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Timestamp.TimeOfDay</Selector>
                    </Expression>
                    <Expression xsi:type="ExternalizedMapping">
                      <Property Name="Value" DisplayName="Start" />
                    </Expression>
                    <Expression xsi:type="GreaterThan">
                      <Operand xsi:type="TimeSpanProperty">
                        <Value>PT8H</Value>
                      </Operand>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:DistinctUntilChanged" />
                    </Expression>
                    <Expression xsi:type="rx:Condition">
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="3" Label="Source1" />
                    <Edge From="2" To="3" Label="Source2" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                    <Edge From="5" To="6" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Take">
                  <rx:Count>1</rx:Count>
                </Combinator>
              </Expression>
              <Expression xsi:type="rx:SelectMany">
                <Name>videowriter</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>tub</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Value</Selector>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="cv:VideoWriter">
                        <cv:FileName>E:\Data\CrabStreams\Videos\tub.avi</cv:FileName>
                        <cv:Suffix>Timestamp</cv:Suffix>
                        <cv:Buffered>true</cv:Buffered>
                        <cv:Overwrite>false</cv:Overwrite>
                        <cv:FourCC>FMP4</cv:FourCC>
                        <cv:FrameRate>30</cv:FrameRate>
                        <cv:FrameSize>
                          <cv:Width>0</cv:Width>
                          <cv:Height>0</cv:Height>
                        </cv:FrameSize>
                        <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>tub</Name>
                    </Expression>
                    <Expression xsi:type="GroupWorkflow">
                      <Name>20 (spring/autumn time)</Name>
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Timestamp.TimeOfDay</Selector>
                          </Expression>
                          <Expression xsi:type="ExternalizedMapping">
                            <Property Name="Value" DisplayName="Start" />
                          </Expression>
                          <Expression xsi:type="GreaterThan">
                            <Operand xsi:type="TimeSpanProperty">
                              <Value>PT20H</Value>
                            </Operand>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:DistinctUntilChanged" />
                          </Expression>
                          <Expression xsi:type="rx:Condition">
                            <Workflow>
                              <Nodes>
                                <Expression xsi:type="WorkflowInput">
                                  <Name>Source1</Name>
                                </Expression>
                                <Expression xsi:type="WorkflowOutput" />
                              </Nodes>
                              <Edges>
                                <Edge From="0" To="1" Label="Source1" />
                              </Edges>
                            </Workflow>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                          <Edge From="1" To="3" Label="Source1" />
                          <Edge From="2" To="3" Label="Source2" />
                          <Edge From="3" To="4" Label="Source1" />
                          <Edge From="4" To="5" Label="Source1" />
                          <Edge From="5" To="6" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="rx:Condition">
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Take">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                    <Expression xsi:type="SubscribeSubject">
                      <Name>tub</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Timestamp</Selector>
                    </Expression>
                    <Expression xsi:type="io:CsvWriter">
                      <io:FileName>E:\Data\CrabStreams\Videos\tub.csv</io:FileName>
                      <io:Append>false</io:Append>
                      <io:Overwrite>false</io:Overwrite>
                      <io:Suffix>Timestamp</io:Suffix>
                      <io:IncludeHeader>true</io:IncludeHeader>
                    </Expression>
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                    <Edge From="5" To="6" Label="Source1" />
                    <Edge From="6" To="7" Label="Source1" />
                    <Edge From="8" To="9" Label="Source1" />
                    <Edge From="9" To="10" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="rx:SelectMany">
                <Name>Wait until next day</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>tub</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Timestamp.TimeOfDay</Selector>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Skip">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Zip" />
                    </Expression>
                    <Expression xsi:type="LessThan" />
                    <Expression xsi:type="rx:Condition">
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Take">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="1" To="3" Label="Source2" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                    <Edge From="5" To="6" Label="Source1" />
                    <Edge From="6" To="7" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Repeat" />
              </Expression>
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="5" To="6" Label="Source1" />
              <Edge From="6" To="7" Label="Source1" />
              <Edge From="7" To="8" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Tank crabitat (spring/autumn)</Name>
          <Description>Logitech webcam acquisition for the tub crabitat in 110.</Description>
          <Workflow>
            <Nodes>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="cv:CameraCapture">
                  <cv:Index>1</cv:Index>
                  <cv:CaptureProperties>
                    <cv:CapturePropertyAssignment>
                      <cv:Property>Fps</cv:Property>
                      <cv:Value>30</cv:Value>
                    </cv:CapturePropertyAssignment>
                    <cv:CapturePropertyAssignment>
                      <cv:Property>FrameWidth</cv:Property>
                      <cv:Value>1920</cv:Value>
                    </cv:CapturePropertyAssignment>
                    <cv:CapturePropertyAssignment>
                      <cv:Property>FrameHeight</cv:Property>
                      <cv:Value>1080</cv:Value>
                    </cv:CapturePropertyAssignment>
                  </cv:CaptureProperties>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Timestamp" />
              </Expression>
              <Expression xsi:type="rx:PublishSubject">
                <Name>tank</Name>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>tank</Name>
              </Expression>
              <Expression xsi:type="GroupWorkflow">
                <Name>8 (spring/autumn time)</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Timestamp.TimeOfDay</Selector>
                    </Expression>
                    <Expression xsi:type="ExternalizedMapping">
                      <Property Name="Value" DisplayName="Start" />
                    </Expression>
                    <Expression xsi:type="GreaterThan">
                      <Operand xsi:type="TimeSpanProperty">
                        <Value>PT8H</Value>
                      </Operand>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:DistinctUntilChanged" />
                    </Expression>
                    <Expression xsi:type="rx:Condition">
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="3" Label="Source1" />
                    <Edge From="2" To="3" Label="Source2" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                    <Edge From="5" To="6" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Take">
                  <rx:Count>1</rx:Count>
                </Combinator>
              </Expression>
              <Expression xsi:type="rx:SelectMany">
                <Name>videowriter</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>tank</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Value</Selector>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="cv:VideoWriter">
                        <cv:FileName>E:\Data\CrabStreams\Videos\tank.avi</cv:FileName>
                        <cv:Suffix>Timestamp</cv:Suffix>
                        <cv:Buffered>true</cv:Buffered>
                        <cv:Overwrite>false</cv:Overwrite>
                        <cv:FourCC>FMP4</cv:FourCC>
                        <cv:FrameRate>30</cv:FrameRate>
                        <cv:FrameSize>
                          <cv:Width>0</cv:Width>
                          <cv:Height>0</cv:Height>
                        </cv:FrameSize>
                        <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>tank</Name>
                    </Expression>
                    <Expression xsi:type="GroupWorkflow">
                      <Name>20 (spring/autumn time)</Name>
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Timestamp.TimeOfDay</Selector>
                          </Expression>
                          <Expression xsi:type="ExternalizedMapping">
                            <Property Name="Value" DisplayName="Start" />
                          </Expression>
                          <Expression xsi:type="GreaterThan">
                            <Operand xsi:type="TimeSpanProperty">
                              <Value>PT20H</Value>
                            </Operand>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:DistinctUntilChanged" />
                          </Expression>
                          <Expression xsi:type="rx:Condition">
                            <Workflow>
                              <Nodes>
                                <Expression xsi:type="WorkflowInput">
                                  <Name>Source1</Name>
                                </Expression>
                                <Expression xsi:type="WorkflowOutput" />
                              </Nodes>
                              <Edges>
                                <Edge From="0" To="1" Label="Source1" />
                              </Edges>
                            </Workflow>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                          <Edge From="1" To="3" Label="Source1" />
                          <Edge From="2" To="3" Label="Source2" />
                          <Edge From="3" To="4" Label="Source1" />
                          <Edge From="4" To="5" Label="Source1" />
                          <Edge From="5" To="6" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="rx:Condition">
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Take">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                    <Expression xsi:type="SubscribeSubject">
                      <Name>tank</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Timestamp</Selector>
                    </Expression>
                    <Expression xsi:type="io:CsvWriter">
                      <io:FileName>E:\Data\CrabStreams\Videos\tank.csv</io:FileName>
                      <io:Append>false</io:Append>
                      <io:Overwrite>false</io:Overwrite>
                      <io:Suffix>Timestamp</io:Suffix>
                      <io:IncludeHeader>true</io:IncludeHeader>
                    </Expression>
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                    <Edge From="5" To="6" Label="Source1" />
                    <Edge From="6" To="7" Label="Source1" />
                    <Edge From="8" To="9" Label="Source1" />
                    <Edge From="9" To="10" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="rx:SelectMany">
                <Name>Wait until next day</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>tank</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Timestamp.TimeOfDay</Selector>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Skip">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Zip" />
                    </Expression>
                    <Expression xsi:type="LessThan" />
                    <Expression xsi:type="rx:Condition">
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Take">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="1" To="3" Label="Source2" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                    <Edge From="5" To="6" Label="Source1" />
                    <Edge From="6" To="7" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Repeat" />
              </Expression>
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="5" To="6" Label="Source1" />
              <Edge From="6" To="7" Label="Source1" />
              <Edge From="7" To="8" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Tub crabitat (winter)</Name>
          <Description>Logitech webcam acquisition for the tub crabitat in 110.</Description>
          <Workflow>
            <Nodes>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="cv:CameraCapture">
                  <cv:Index>0</cv:Index>
                  <cv:CaptureProperties>
                    <cv:CapturePropertyAssignment>
                      <cv:Property>Fps</cv:Property>
                      <cv:Value>30</cv:Value>
                    </cv:CapturePropertyAssignment>
                    <cv:CapturePropertyAssignment>
                      <cv:Property>FrameWidth</cv:Property>
                      <cv:Value>1920</cv:Value>
                    </cv:CapturePropertyAssignment>
                    <cv:CapturePropertyAssignment>
                      <cv:Property>FrameHeight</cv:Property>
                      <cv:Value>1080</cv:Value>
                    </cv:CapturePropertyAssignment>
                  </cv:CaptureProperties>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Timestamp" />
              </Expression>
              <Expression xsi:type="rx:PublishSubject">
                <Name>tub</Name>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>tub</Name>
              </Expression>
              <Expression xsi:type="GroupWorkflow">
                <Name>9 (winter time)</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Timestamp.TimeOfDay</Selector>
                    </Expression>
                    <Expression xsi:type="ExternalizedMapping">
                      <Property Name="Value" DisplayName="Start" />
                    </Expression>
                    <Expression xsi:type="GreaterThan">
                      <Operand xsi:type="TimeSpanProperty">
                        <Value>PT9H</Value>
                      </Operand>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:DistinctUntilChanged" />
                    </Expression>
                    <Expression xsi:type="rx:Condition">
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="3" Label="Source1" />
                    <Edge From="2" To="3" Label="Source2" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                    <Edge From="5" To="6" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Take">
                  <rx:Count>1</rx:Count>
                </Combinator>
              </Expression>
              <Expression xsi:type="rx:SelectMany">
                <Name>videowriter</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>tub</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Value</Selector>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="cv:VideoWriter">
                        <cv:FileName>E:\Data\CrabStreams\Videos\tub.avi</cv:FileName>
                        <cv:Suffix>Timestamp</cv:Suffix>
                        <cv:Buffered>true</cv:Buffered>
                        <cv:Overwrite>false</cv:Overwrite>
                        <cv:FourCC>FMP4</cv:FourCC>
                        <cv:FrameRate>30</cv:FrameRate>
                        <cv:FrameSize>
                          <cv:Width>0</cv:Width>
                          <cv:Height>0</cv:Height>
                        </cv:FrameSize>
                        <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>tub</Name>
                    </Expression>
                    <Expression xsi:type="GroupWorkflow">
                      <Name>19 (winter time)</Name>
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Timestamp.TimeOfDay</Selector>
                          </Expression>
                          <Expression xsi:type="ExternalizedMapping">
                            <Property Name="Value" DisplayName="Start" />
                          </Expression>
                          <Expression xsi:type="GreaterThan">
                            <Operand xsi:type="TimeSpanProperty">
                              <Value>PT19H</Value>
                            </Operand>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:DistinctUntilChanged" />
                          </Expression>
                          <Expression xsi:type="rx:Condition">
                            <Workflow>
                              <Nodes>
                                <Expression xsi:type="WorkflowInput">
                                  <Name>Source1</Name>
                                </Expression>
                                <Expression xsi:type="WorkflowOutput" />
                              </Nodes>
                              <Edges>
                                <Edge From="0" To="1" Label="Source1" />
                              </Edges>
                            </Workflow>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                          <Edge From="1" To="3" Label="Source1" />
                          <Edge From="2" To="3" Label="Source2" />
                          <Edge From="3" To="4" Label="Source1" />
                          <Edge From="4" To="5" Label="Source1" />
                          <Edge From="5" To="6" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="rx:Condition">
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Take">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                    <Expression xsi:type="SubscribeSubject">
                      <Name>tub</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Timestamp</Selector>
                    </Expression>
                    <Expression xsi:type="io:CsvWriter">
                      <io:FileName>E:\Data\CrabStreams\Videos\tub.csv</io:FileName>
                      <io:Append>false</io:Append>
                      <io:Overwrite>false</io:Overwrite>
                      <io:Suffix>Timestamp</io:Suffix>
                      <io:IncludeHeader>true</io:IncludeHeader>
                    </Expression>
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                    <Edge From="5" To="6" Label="Source1" />
                    <Edge From="6" To="7" Label="Source1" />
                    <Edge From="8" To="9" Label="Source1" />
                    <Edge From="9" To="10" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="rx:SelectMany">
                <Name>Wait until next day</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>tub</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Timestamp.TimeOfDay</Selector>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Skip">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Zip" />
                    </Expression>
                    <Expression xsi:type="LessThan" />
                    <Expression xsi:type="rx:Condition">
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Take">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="1" To="3" Label="Source2" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                    <Edge From="5" To="6" Label="Source1" />
                    <Edge From="6" To="7" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Repeat" />
              </Expression>
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="5" To="6" Label="Source1" />
              <Edge From="6" To="7" Label="Source1" />
              <Edge From="7" To="8" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Tank crabitat (winter)</Name>
          <Description>Logitech webcam acquisition for the tub crabitat in 110.</Description>
          <Workflow>
            <Nodes>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="cv:CameraCapture">
                  <cv:Index>1</cv:Index>
                  <cv:CaptureProperties>
                    <cv:CapturePropertyAssignment>
                      <cv:Property>Fps</cv:Property>
                      <cv:Value>30</cv:Value>
                    </cv:CapturePropertyAssignment>
                    <cv:CapturePropertyAssignment>
                      <cv:Property>FrameWidth</cv:Property>
                      <cv:Value>1920</cv:Value>
                    </cv:CapturePropertyAssignment>
                    <cv:CapturePropertyAssignment>
                      <cv:Property>FrameHeight</cv:Property>
                      <cv:Value>1080</cv:Value>
                    </cv:CapturePropertyAssignment>
                  </cv:CaptureProperties>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Timestamp" />
              </Expression>
              <Expression xsi:type="rx:PublishSubject">
                <Name>tank</Name>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>tank</Name>
              </Expression>
              <Expression xsi:type="GroupWorkflow">
                <Name>9 (winter time)</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Timestamp.TimeOfDay</Selector>
                    </Expression>
                    <Expression xsi:type="ExternalizedMapping">
                      <Property Name="Value" DisplayName="Start" />
                    </Expression>
                    <Expression xsi:type="GreaterThan">
                      <Operand xsi:type="TimeSpanProperty">
                        <Value>PT9H</Value>
                      </Operand>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:DistinctUntilChanged" />
                    </Expression>
                    <Expression xsi:type="rx:Condition">
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="3" Label="Source1" />
                    <Edge From="2" To="3" Label="Source2" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                    <Edge From="5" To="6" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Take">
                  <rx:Count>1</rx:Count>
                </Combinator>
              </Expression>
              <Expression xsi:type="rx:SelectMany">
                <Name>videowriter</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>tank</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Value</Selector>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="cv:VideoWriter">
                        <cv:FileName>E:\Data\CrabStreams\Videos\tank.avi</cv:FileName>
                        <cv:Suffix>Timestamp</cv:Suffix>
                        <cv:Buffered>true</cv:Buffered>
                        <cv:Overwrite>false</cv:Overwrite>
                        <cv:FourCC>FMP4</cv:FourCC>
                        <cv:FrameRate>30</cv:FrameRate>
                        <cv:FrameSize>
                          <cv:Width>0</cv:Width>
                          <cv:Height>0</cv:Height>
                        </cv:FrameSize>
                        <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>tank</Name>
                    </Expression>
                    <Expression xsi:type="GroupWorkflow">
                      <Name>19 (winter time)</Name>
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Timestamp.TimeOfDay</Selector>
                          </Expression>
                          <Expression xsi:type="ExternalizedMapping">
                            <Property Name="Value" DisplayName="Start" />
                          </Expression>
                          <Expression xsi:type="GreaterThan">
                            <Operand xsi:type="TimeSpanProperty">
                              <Value>PT19H</Value>
                            </Operand>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:DistinctUntilChanged" />
                          </Expression>
                          <Expression xsi:type="rx:Condition">
                            <Workflow>
                              <Nodes>
                                <Expression xsi:type="WorkflowInput">
                                  <Name>Source1</Name>
                                </Expression>
                                <Expression xsi:type="WorkflowOutput" />
                              </Nodes>
                              <Edges>
                                <Edge From="0" To="1" Label="Source1" />
                              </Edges>
                            </Workflow>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                          <Edge From="1" To="3" Label="Source1" />
                          <Edge From="2" To="3" Label="Source2" />
                          <Edge From="3" To="4" Label="Source1" />
                          <Edge From="4" To="5" Label="Source1" />
                          <Edge From="5" To="6" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="rx:Condition">
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Take">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                    <Expression xsi:type="SubscribeSubject">
                      <Name>tank</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Timestamp</Selector>
                    </Expression>
                    <Expression xsi:type="io:CsvWriter">
                      <io:FileName>E:\Data\CrabStreams\Videos\tank.csv</io:FileName>
                      <io:Append>false</io:Append>
                      <io:Overwrite>false</io:Overwrite>
                      <io:Suffix>Timestamp</io:Suffix>
                      <io:IncludeHeader>true</io:IncludeHeader>
                    </Expression>
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                    <Edge From="5" To="6" Label="Source1" />
                    <Edge From="6" To="7" Label="Source1" />
                    <Edge From="8" To="9" Label="Source1" />
                    <Edge From="9" To="10" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="rx:SelectMany">
                <Name>Wait until next day</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>tank</Name>
                    </Expression>
                    <Expression xsi:type="MemberSelector">
                      <Selector>Timestamp.TimeOfDay</Selector>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Skip">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Zip" />
                    </Expression>
                    <Expression xsi:type="LessThan" />
                    <Expression xsi:type="rx:Condition">
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Take">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="1" To="3" Label="Source2" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                    <Edge From="5" To="6" Label="Source1" />
                    <Edge From="6" To="7" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Repeat" />
              </Expression>
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="5" To="6" Label="Source1" />
              <Edge From="6" To="7" Label="Source1" />
              <Edge From="7" To="8" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
    </Nodes>
    <Edges />
  </Workflow>
</WorkflowBuilder>